PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'gender': 'female'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Recognition memory
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine WelcomeScreen
    RoutineSettingsComponent WelcomeScreen
      saveStartStop = False
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    TextComponent textWelcome
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to our experiment.
        Press "SPACE" to continue.
    KeyboardComponent key_Welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine EndScreen
    RoutineSettingsComponent EndScreen
      saveStartStop = False
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    TextComponent textEnd
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Thanks for participating
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    KeyboardComponent key_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      syncScreenRefresh = False
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  Routine studyTrial
    RoutineSettingsComponent studyTrial
      saveStartStop = False
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $study_word
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  Routine testInstructions
    RoutineSettingsComponent testInstructions
      saveStartStop = False
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    TextComponent textInstructions
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Get ready for the test.
        If old word press "Y"
        If new word press "N"
        press "SPACE" to continue
    KeyboardComponent key_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine testTrial
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    TextComponent text_test
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $study_word
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    KeyboardComponent key_test
      allowedKeys [set every repeat] = 'y','n', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank
    RoutineSettingsComponent blank
      saveStartStop = False
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    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        10 words will pop up.
        1.5 seconds per word.
        press "SPACE" to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine trial_test
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    TextComponent text_trial
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text [set every repeat] = $study_word
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    KeyboardComponent key_test_trial
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_words
    RoutineSettingsComponent trial_words
      saveStartStop = False
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    TextComponent word_stimulus
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $study_word
    KeyboardComponent test_response
      allowedKeys [set every repeat] = 'y','n'
      correctAns = $correct_response
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine test_feedback
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  Routine test_Trial_n
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    TextComponent word_stimulus_
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0
      text [set every repeat] = $study_word
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    KeyboardComponent test_response_
      allowedKeys [set every repeat] = 'y','n'
      correctAns = $correct_response
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      storeCorrect = True
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Flow
  Routine WelcomeScreen
  Routine blank
  LoopInitiator trialsStudy loopType="TrialHandler"
    conditionsFile = STUDY_WORDS.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'probability'},
      {'study_word': 'memory'},
      {'study_word': 'computer'},
      {'study_word': 'garden'},
      {'study_word': 'friend'},
      {'study_word': 'family'},
      {'study_word': 'summer'},
      {'study_word': 'coffee'},
      {'study_word': 'animal'},
      {'study_word': 'number'}]
    Routine studyTrial
  LoopTerminator trialsStudy
  Routine testInstructions
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:14
    conditionsFile = test_trial.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'probability', 'type': 'old', 'correct_response': 'y'},
      {'study_word': 'memory', 'type': 'old', 'correct_response': 'y'},
      {'study_word': 'computer', 'type': 'old', 'correct_response': 'y'},
      {'study_word': 'garden', 'type': 'old', 'correct_response': 'y'},
      {'study_word': 'friend', 'type': 'old', 'correct_response': 'y'},
      {'study_word': 'family', 'type': 'old', 'correct_response': 'y'},
      {'study_word': 'summer', 'type': 'old', 'correct_response': 'y'},
      {'study_word': 'coffee', 'type': 'old', 'correct_response': 'y'},
      {'study_word': 'animal', 'type': 'old', 'correct_response': 'y'},
      {'study_word': 'number', 'type': 'old', 'correct_response': 'y'},
      {'study_word': 'laptop', 'type': 'new', 'correct_response': 'n'},
      {'study_word': 'sunlight', 'type': 'new', 'correct_response': 'n'},
      {'study_word': 'similar', 'type': 'new', 'correct_response': 'n'},
      {'study_word': 'spring', 'type': 'new', 'correct_response': 'n'},
      {'study_word': 'complex', 'type': 'new', 'correct_response': 'n'},
      {'study_word': 'Table', 'type': 'new', 'correct_response': 'n'},
      {'study_word': None, 'type': None, 'correct_response': None},
      {'study_word': None, 'type': None, 'correct_response': None},
      {'study_word': None, 'type': None, 'correct_response': None},
      {'study_word': None, 'type': None, 'correct_response': None},
      {'study_word': None, 'type': None, 'correct_response': None},
      {'study_word': None, 'type': None, 'correct_response': None},
      {'study_word': None, 'type': None, 'correct_response': None}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
    Routine trial_words
  LoopTerminator trials
  Routine EndScreen
